PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {'participant':'', 'session':'001'}
  Units = use prefs
  Window size (pixels) = (1024, 768)
  Full-screen window = True
  expName = sequenceLearningTask
  Screen = 1
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Routines
  Routine stim1
    ImageComponent pos1
      stopVal [duration (s)] = 5.0
      pos [set every frame] = (0, 0)
      startVal [time (s)] = 0.0
      image [set every repeat] = $pawPatrol1
      size = (2,2)
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    KeyboardComponent key_resp_5
      correctAns = 1
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = '1'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine stim2
    ImageComponent image_3
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $pawPatrol2
      size = (2, 2)
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    KeyboardComponent key_resp_6
      correctAns = 2
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = '2'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine stim3
    ImageComponent image_4
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $pawPatrol3
      size = (2, 2)
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    KeyboardComponent key_resp_7
      correctAns = 3
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = '3'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine stim4
    ImageComponent image_5
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $pawPatrol4
      size = (2, 2)
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    KeyboardComponent key_resp_8
      correctAns = 4
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = '4'
      startVal [time (s)] = 0.0
      store = all keys
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  Routine instructions2
    TextComponent text_5
      stopVal [duration (s)] = 1.0
      text = Get Ready...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_6
      stopVal [duration (s)] = 1.0
      text = GO!
      startVal [time (s)] = 1
      letterHeight = 0.1
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  Routine practice
    ImageComponent image_paw1
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      image [set every repeat] = $pawPatrol1
      size = (2, 2)
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    TextComponent text
      color [set every repeat] = black
      stopVal [duration (s)] = 20
      pos = (0, .8)
      text = Press 1 when Chase is here 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_1
      correctAns = 1
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'space','return'
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine stimBlank
    ImageComponent blankImage
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      image [set every repeat] = $blank
      size = (2, 2)
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  Routine end
    TextComponent goodJob
      stopVal [duration (s)] = 10.
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You do it!!!!

        You caught 463 paw patrol characters!
    KeyboardComponent key_resp_10
      forceEndRoutine = True
      allowedKeys = 'enter','space'
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent fixationCross
      stopVal [duration (s)] = 5.0
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine practice2
    ImageComponent image_paw2
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      image [set every repeat] = $pawPatrol2
      size = (2, 2)
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    TextComponent text_2
      color [set every repeat] = black
      stopVal [duration (s)] = 20
      pos = (0, .8)
      text = Press 2 when Rubble is here 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      correctAns = 2
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'space','return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice3
    ImageComponent image_paw3
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      image [set every repeat] = $pawPatrol3
      size = (2,2)
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    TextComponent text_3
      color [set every repeat] = black
      stopVal [duration (s)] = 20
      pos = (0, .8)
      text = Press 3 when Marshall is here 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_3
      correctAns = 3
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'space', 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice4
    ImageComponent image_paw4
      stopVal [duration (s)] = 20
      startVal [time (s)] = 0.0
      image [set every repeat] = $pawPatrol4
      size = (2, 2)
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    TextComponent text_4
      color [set every repeat] = black
      stopVal [duration (s)] = 20
      pos = (0, .8)
      text = Press 4 when Rocky is here 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_resp_4
      correctAns = 4
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'space', 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break_2
    TextComponent text_7
      stopVal [duration (s)] = 10.0
      text = Take a short break 
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine randomStim
    ImageComponent image
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $randomPaw
      size = (2, 2)
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    KeyboardComponent key_resp_9
      forceEndRoutine = True
      allowedKeys = allowableKey
      startVal [time (s)] = 0.0
      store = all keys
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  Routine instructions
    TextComponent instructionsGeneral
      color [set every repeat] = white
      stopVal [duration (s)] = 120.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        In this game you're going to see pictures of paw patrol characters.
        It is your job to catch as many dogs as you can.
        Use the 1 2 3 4 keys and your first four fingers to catch the dogs when they show up in their positions.
        Press the buttons as fast as you can every time you see a dog to catch him before he escapes!





        (experimenter press spacebar)
    KeyboardComponent instructionsResponse
      stopVal [duration (s)] = 120
      forceEndRoutine = True
      allowedKeys [set every repeat] = 'space', 'enter', 'return'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = pawStimuli.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
    conditions = [{'pawPatrol1': u'paw1.png', 'pawPatrol2': u'paw2.png', 'pawPatrol3': u'paw3.png', 'pawPatrol4': u'paw4.png'}]
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    Routine practice
    Routine practice2
    Routine practice3
    Routine practice4
  LoopTerminator trials
  Routine instructions2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = random.xlsx
    loopType = random
    nReps = 25
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    conditions:
      [{'randomPaw': u'paw1.png', 'allowableKey': ['1'], 'blank': u'allBlank.png'},
      {'randomPaw': u'paw2.png', 'allowableKey': ['2'], 'blank': u'allBlank.png'},
      {'randomPaw': u'paw3.png', 'allowableKey': ['3'], 'blank': u'allBlank.png'},
      {'randomPaw': u'paw4.png', 'allowableKey': ['4'], 'blank': u'allBlank.png'}]
    Routine randomStim
    Routine stimBlank
  LoopTerminator trials_2
  Routine break_2
  Routine instructions2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = pawStimuli.xlsx
    loopType = sequential
    nReps = 10
    conditions = [{'pawPatrol1': u'paw1.png', 'pawPatrol2': u'paw2.png', 'pawPatrol3': u'paw3.png', 'pawPatrol4': u'paw4.png', 'blank': u'allBlank.png'}]
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    Routine stim1
    Routine stimBlank
    Routine stim3
    Routine stimBlank
    Routine stim2
    Routine stimBlank
    Routine stim4
    Routine stimBlank
    Routine stim4
    Routine stimBlank
    Routine stim2
    Routine stimBlank
    Routine stim3
    Routine stimBlank
    Routine stim4
    Routine stimBlank
    Routine stim2
    Routine stimBlank
    Routine stim4
    Routine stimBlank
  LoopTerminator trials_3
  Routine break_2
  Routine instructions2
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = pawStimuli.xlsx
    loopType = sequential
    nReps = 10
    conditions = [{'pawPatrol1': u'paw1.png', 'pawPatrol2': u'paw2.png', 'pawPatrol3': u'paw3.png', 'pawPatrol4': u'paw4.png', 'blank': u'allBlank.png'}]
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    Routine stim1
    Routine stimBlank
    Routine stim3
    Routine stimBlank
    Routine stim2
    Routine stimBlank
    Routine stim4
    Routine stimBlank
    Routine stim4
    Routine stimBlank
    Routine stim2
    Routine stimBlank
    Routine stim3
    Routine stimBlank
    Routine stim4
    Routine stimBlank
    Routine stim2
    Routine stimBlank
    Routine stim4
    Routine stimBlank
  LoopTerminator trials_5
  Routine break_2
  Routine instructions2
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = random.xlsx
    loopType = random
    nReps = 25
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    conditions:
      [{'randomPaw': u'paw1.png', 'allowableKey': ['1'], 'blank': u'allBlank.png'},
      {'randomPaw': u'paw2.png', 'allowableKey': ['2'], 'blank': u'allBlank.png'},
      {'randomPaw': u'paw3.png', 'allowableKey': ['3'], 'blank': u'allBlank.png'},
      {'randomPaw': u'paw4.png', 'allowableKey': ['4'], 'blank': u'allBlank.png'}]
    Routine randomStim
    Routine stimBlank
  LoopTerminator trials_4
  Routine end
